// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "LinearInterpolator")
(ResampleInterpolator "FinalLinearInterpolator")
(Metric "NormalizedMutualInformation")
(Optimizer "FullSearch")
(Resampler "DefaultResampler")
(Transform "EulerTransform")

(FullSearchSpace0 "rotation_x" 0 -3.1 3.1 0.50 "rotation_y" 1 -1.6 1.6 0.50 "rotation_z" 2 -3.1 3.1 0.50)
(FullSearchSpace1 "rotation_x" 0 -3.1 3.1 0.36 "rotation_y" 1 -1.6 1.6 0.36 "rotation_z" 2 -3.1 3.1 0.36)
(FullSearchSpace2 "rotation_x" 0 -3.1 3.1 0.15 "rotation_y" 1 -1.6 1.6 0.15 "rotation_z" 2 -3.1 3.1 0.15)


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 3)
(ImagePyramidSchedule 4 4 1 2 2 1 1 1 1)
(ImagePyramidSmoothingSchedule 4 4 1 2 2 1 1 1 1)


// ********** Transform

(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "CenterOfGravity")
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 1000)
(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")


// ********** Metric
(NumberOfHistogramBins 32)
(FixedKernelBSplineOrder 0)
(MovingKernelBSplineOrder 3)

// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "false")
(ResultImageFormat "mha")
(ShowExactMetricValue "false")
(ErodeMask "false")
(UseDirectionCosines "true")
(CheckNumberOfSamples "true")

// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "Random")
(NumberOfSpatialSamples 50000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
(MaximumNumberOfSamplingAttempts 5)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

